PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = laptop17Inch
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 0.7882, 0.7647
  expName = mcgurk
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
  rush = True
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Routines
  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    CodeComponent prepareTrial
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        from psychopy import data
    MovieComponent congurentVideo
      backend = ffpyplayer
      durationEstim = 1
      forceEndRoutine = False
      movie [set every repeat] = $video_file
      saveStartStop = False
      size = (1.8, 1.0)
      startEstim = 0
      startVal [time (s)] = 0
      volume = 0.7
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  Routine instructions
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    CodeComponent prepareSequence
      Code Type = Auto->JS
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      Begin Routine:
        import random
        from psychopy import prefs
    TextComponent instructionsText
      color = -0.8902, -0.7490, -0.8039
      font = Courier New
      letterHeight = 0.085
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Добро пожаловать!

        Вы увидите несколько коротких видео
        После просмотра видео, вам будет предложено ответить, что было произнесено человеком на видео

         Если готовы, то нажмите ПРОБЕЛ для того, чтобы начать
    KeyboardComponent proceedButton
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent textOptions
      Code Type = Py
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      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        instructionsText.alignText= 'center'
  Routine fixation
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    TextComponent fixationScreen
      color = -0.8902, -0.7490, -0.8039
      font = Courier New
      letterHeight = 0.08
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = *
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  Routine thank_you
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    TextComponent thankYouText
      color = -0.8902, -0.7490, -0.8039
      font = Courier New
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Спасибо за участие!
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  Routine response
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    TextComponent responseScreen
      color = -0.8902, -0.7490, -0.8039
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = Что было сказано?
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    TextboxComponent responseForm
      bold = False
      borderColor = -0.8196, -0.5059, -0.5529
      borderWidth = 1.5
      color = -0.8902, -0.7490, -0.8039
      editable = True
      font = Courier New
      letterHeight = 0.05
      padding = 0.01
      placeholder = Напишите, что было сказано
      size = (0.9, 0.1)
      startVal [time (s)] = 1.0
      units = norm
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    KeyboardComponent submitButton
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent isiScreen
      letterHeight = 0.05
      startVal [time (s)] = submitButton.status == FINISHED
      stopVal [duration (s)] = 1.5
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  Routine trial_dst
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    CodeComponent prepareTrialDst
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        from psychopy import data
    MovieComponent congurentVideoDst
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $video_file_dst
      size = (1.8, 1.0)
      startVal [time (s)] = 0
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Flow
  Routine instructions
  LoopInitiator blocks_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'video_file': 'stimuli/stimuli_baba_baba.mp4', 'articulation': 'ba_ba', 'utterance': 'ba_ba', 'distorted': 0},
      {'video_file': 'stimuli/stimuli_baba_dada.mp4', 'articulation': 'ba_ba', 'utterance': 'da_da', 'distorted': 0},
      {'video_file': 'stimuli/stimuli_baba_vava.mp4', 'articulation': 'ba_ba', 'utterance': 'va_va', 'distorted': 0},
      {'video_file': 'stimuli/stimuli_dada_baba.mp4', 'articulation': 'da_da', 'utterance': 'ba_ba', 'distorted': 0},
      {'video_file': 'stimuli/stimuli_dada_dada.mp4', 'articulation': 'da_da', 'utterance': 'da_da', 'distorted': 0},
      {'video_file': 'stimuli/stimuli_dada_vava.mp4', 'articulation': 'da_da', 'utterance': 'va_va', 'distorted': 0},
      {'video_file': 'stimuli/stimuli_vava_baba.mp4', 'articulation': 'va_va', 'utterance': 'ba_ba', 'distorted': 0},
      {'video_file': 'stimuli/stimuli_vava_dada.mp4', 'articulation': 'va_va', 'utterance': 'da_da', 'distorted': 0},
      {'video_file': 'stimuli/stimuli_vava_vava.mp4', 'articulation': 'va_va', 'utterance': 'va_va', 'distorted': 0},
      {'video_file': 'stimuli/stimuli_baba_baba_dst.mp4', 'articulation': 'ba_ba', 'utterance': 'ba_ba', 'distorted': 1},
      {'video_file': 'stimuli/stimuli_baba_dada_dst.mp4', 'articulation': 'ba_ba', 'utterance': 'da_da', 'distorted': 1},
      {'video_file': 'stimuli/stimuli_baba_vava_dst.mp4', 'articulation': 'ba_ba', 'utterance': 'va_va', 'distorted': 1},
      {'video_file': 'stimuli/stimuli_dada_baba_dst.mp4', 'articulation': 'da_da', 'utterance': 'ba_ba', 'distorted': 1}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
    Routine fixation
    Routine trial
    Routine response
  LoopTerminator blocks_loop
  Routine thank_you
